PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'dev_mode': '1', 'max_iters': '15', 'pop_size': '8', 'scr_attached': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = image_gen
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        ## Generate batch of images

        ## Variables
        #iteration = generations.thisN
        trial = trials.thisN
        #embedding = this_gen_embeddings[trial, :]

        ## Set image
        image_name = f"images/num-{trial}.png"
      End Routine:
        ## Update output matrices
        #all_embeddings[iteration,trial,:] = embedding
    ImageComponent image
      image [set every repeat] = $image_name
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine washout
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    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine generating
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent generate_images
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import torch
        import numpy as np
        from diffusers import StableUnCLIPImg2ImgPipeline
        from sklearn.decomposition import PCA
        import pickle as pk
        import os, shutil
        from datetime import datetime, timedelta
        import pandas as pd

        ## Classes
        class Image(visual.ImageStim):
            # Embedding property
            embedding = None

        ## Functions
        def generate_image(embedding, image_name):
            # Ensure correct size and datatype
            embedding = torch.tensor(np.reshape(embedding, (1,np.size(embedding))), dtype=torch.float16)
            embedding = embedding.to(device)
            # Generate and save image
            images = pipe(image_embeds=embedding, num_inference_steps=diffusion_steps).images
            images[0].save(image_name)

        def new_generation(fitness, x, iteration):
            top_n = int(pop_size/2)

            # Get top vectors
            idx = np.argsort(fitness)[::-1]
            fitness_sorted = fitness[idx]
            x_sorted = x[idx, :]

            fitness_top = fitness_sorted[:top_n]
            x_top = x_sorted[:top_n, :]

            # Compute recombination probability weights
            median = np.median(fitness)
            fitness_relative = np.clip(fitness_top - median, 0, None)
            weights = np.ones(np.size(fitness_relative)) / pop_size
            if np.sum(fitness_relative) > 0:
                weights = fitness_relative / np.sum(fitness_relative)

            mean = np.sum((x_top.T * weights).T, axis=0)
            next_x = np.random.multivariate_normal(mean, mutation_size * np.identity(vec_size), size=pop_size)
            next_x = np.random.multivariate_normal(mean, mutation_size * cov, size=pop_size)

            return next_x
      Begin Experiment:
        ## Set variables
        global model_path
        model_path = "C:/Users/dariu/Documents/PhD/ImageGeneration/stable-diffusion-2-1-unclip-small"
        global diffusion_steps
        diffusion_steps = 12

        global participant
        participant = int(expInfo['participant'])
        if not os.path.exists(f"data/{participant}"):
            os.makedirs(f"data/{participant}")

        global dev_mode
        dev_mode = int(expInfo['dev_mode'])
        global scr_attached
        scr_attached = int(expInfo['scr_attached'])

        global max_iters
        max_iters = int(expInfo['max_iters'])
        global pop_size
        pop_size = int(expInfo['pop_size'])
        global mutation_size
        mutation_size = 0.3
        global vec_size
        vec_size = 80
        global embedding_size
        embedding_size = 768

        # Load PCA and covariance matrix
        global pca
        pca = pk.load(open("pca.pkl",'rb'))
        global cov
        cov = np.loadtxt("covariance_matrix.txt")

        #all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        #all_ratings = np.zeros((max_iters, pop_size))
        #all_scr = np.zeros((max_iters, pop_size))
        #all_scr_means = np.zeros((max_iters, pop_size))

        ## Set unCLIP device
        if not dev_mode:
            global device
            device = torch.device('cuda' if torch.cuda.is_available() else 'cpu')
            print('Using device:', device)

            ## Load model
            global pipe
            pipe = StableUnCLIPImg2ImgPipeline.from_pretrained(model_path, torch_dtype=torch.float16, variation="fp16")
            pipe = pipe.to(device)
            # pipe.enable_model_cpu_offload()
            # pipe.enable_vae_slicing()
      Begin Routine:
        iteration = generations.thisN

        ## Generate vectors
        if iteration == 0:
            this_trial_embeddings = np.random.multivariate_normal(np.zeros(vec_size), cov, size=pop_size)
        else:
            ## CMA algorithm
            fitness = []
            if condition == "selfreport" or not scr_attached:
                fitness = all_ratings[iteration - 1, :]
            elif condition == "scr":
                fitness = all_scr[iteration - 1, :]
            elif condition == "combined":
                scr_fitness = all_scr[iteration - 1, :]
                scr_fitness_norm = np.interp(scr_fitness, (np.min(scr_fitness), np.max(scr_fitness)), (0, 1))
                selfreport_fitness = all_ratings[iteration - 1, :]
                selfreport_fitness_norm = np.interp(selfreport_fitness, (np.min(selfreport_fitness), np.max(selfreport_fitness)), (0, 1))
                fitness = (scr_fitness_norm + selfreport_fitness_norm) / 2
            else:
                raise Exception("Error: Invalid condition name")
            embeddings = all_embeddings[iteration - 1, :, :]
            this_trial_embeddings = new_generation(fitness, embeddings, iteration)

        all_embeddings[iteration, :, :] = this_trial_embeddings

        ## Generate batch of images
        for i in range(pop_size):
            image_name = f"images/num-{i}.png"
            pcs = this_trial_embeddings[i,:]
            embedding = pca.inverse_transform(pcs)
            if not dev_mode:
                generate_image(embedding, image_name)

        continueRoutine = False
  Routine rating
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    SliderComponent slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      labels = ("0","","","","","5","","","","","10")
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate the fear you experienced.
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        ## Get SCR amplitudes

        if scr_attached:
            # Get start and end times of trial
            current_time = datetime.now().time()
            dummy_datetime = datetime.combine(datetime.today(), current_time)
            # Get relevant times
            end_time = (dummy_datetime - timedelta(seconds=1)).time()
            start_time = (dummy_datetime - timedelta(seconds=4)).time()
            baseline_time = (dummy_datetime - timedelta(seconds=6)).time()

            ## Load EDA data
            eda_data = pd.read_csv("eda_data.txt", names=["eda", "time"])
            # Convert the 'time' column to datetime format
            eda_data['time'] = pd.to_datetime(eda_data['time'], format='%H:%M:%S.%f').dt.time
            # Apply smoothing to reduce noise
            eda_data['eda_smooth'] = eda_data['eda'].rolling(window=5, center=True).mean()

            # Filter the DataFrame based on the time range
            baseline_data = eda_data[(eda_data['time'] >= baseline_time) & (eda_data['time'] <= start_time)]
            image_data = eda_data[(eda_data['time'] >= start_time) & (eda_data['time'] <= end_time)]

            # Get average baseline SCR
            baseline = baseline_data['eda_smooth'].mean()
            scr_mean = image_data['eda_smooth'].mean()

            ## Get the sampling rate and resample
            sampling_rate = len(image_data) / 3.0
            scr_score = (image_data['eda_smooth'] - baseline).sum() / sampling_rate

            # Reset the EDA file after each use to avoid bloating it
            with open("eda_data.txt", 'w') as file:
                pass
        else:
            scr_score = 0
            scr_mean = 0
      End Routine:
        all_ratings[iteration,trial] = slider.getRating()
        all_scr[iteration,trial] = scr_score
        all_scr_means[iteration,trial] = scr_mean
    ButtonComponent button
      bold = False
      borderColor = black
      borderWidth = 3
      color = black
      fillColor = lightgrey
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Done
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      callback:
        if slider.getRating():
            continueRoutine = False
  Routine start_text
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    TextComponent intro
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will be presented with a series of images. After each image, rate the fear you experienced on the sliding scale.

        Press [SPACE] to start,
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine end_text
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    TextComponent outro
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment is now over.

        Thank you for participating!
  Routine clear_data
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Reset data for new loop

        all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        all_ratings = np.zeros((max_iters, pop_size))
        all_scr = np.zeros((max_iters, pop_size))
        all_scr_means = np.zeros((max_iters, pop_size))
  Routine generate_text
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating...
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  Routine save_data
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        ## Print outputs to txt
        if not os.path.exists(f"data/{participant}/{condition}"):
            os.makedirs(f"data/{participant}/{condition}")
        np.savetxt(f'data/{participant}/{condition}/embeddings.txt', all_embeddings.reshape((max_iters*pop_size, vec_size)), delimiter=',')
        np.savetxt(f'data/{participant}/{condition}/ratings.txt', all_ratings, delimiter=',')
        np.savetxt(f'data/{participant}/{condition}/scr_scores.txt', all_scr, delimiter=',')
        np.savetxt(f'data/{participant}/{condition}/scr_means.txt', all_scr_means, delimiter=',')


        ## Save image backups
        dest_path = f"data/{participant}/{condition}/images/generation_{iteration}"
        if not os.path.exists(dest_path):
            os.makedirs(dest_path)
        shutil.copytree('images', dest_path, dirs_exist_ok=True)

        # Clear EDA file
        with open("eda_data.txt", 'w') as file:
            pass
    TextComponent text_7
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Saving...
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Flow
  Routine start_text
  LoopInitiator block loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = conditions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'selfreport')]),
      OrderedDict([('condition', 'scr')]),
      OrderedDict([('condition', 'combined')])]
    Routine clear_data
    LoopInitiator generations loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = max_iters
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      Routine generate_text
      Routine generating
      Routine washout
      LoopInitiator trials loopType="TrialHandler"
        loopType = sequential
        nReps = pop_size
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        Routine trial
        Routine rating
        Routine washout
      LoopTerminator trials
      Routine save_data
    LoopTerminator generations
  LoopTerminator block
  Routine end_text
